PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/sub-%s/ses-%s/beh/sub-%s_ses-%s_%s' % (expInfo['Protocol ID'], expInfo['Subject ID'], expInfo['Session ID'], expInfo['Subject ID'], expInfo['Session ID'], timestamp)
  Experiment info = {'Protocol ID': '$sysarg_protocol_id', 'Subject ID': '$sysarg_subject_id', 'Session ID': '$sysarg_session_id', 'Save Directory': '$sysarg_save_dir'}
  Full-screen window = True
  Monitor = wfieldMonitor
  Screen = 3
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = CheckerBar_vis_build-v0.8
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine Vertical_Right
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    CodeComponent checker_texture_right
      Code Type = Auto->JS
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      Begin Experiment:
        #import numpy as np
        #from psychopy import visual
        #from stimupy.stimuli.checkerboards import checkerboard

        #vertical_right_stim = checkerboard(visual_size=(13,3), ppd=31,
        #shape=None, frequency=0.5, board_shape=(13,3),
        #check_visual_size=1, period='ignore', rotation=0,
        #intensity_checks=(-1,1), intensity_target=1)
        #
        ##PARAMETERS
        #
        #frame_rate = 60
        #
        #color_alternating_freq = int(frame_rate/12)
        #
        ##Initialize frame counter
        #frame_counter = 0
      Begin Routine:
        stim = vertical_stim

        frame_counter = 0
      Each Frame:
        #need to change foreground color value from black to
        #white at 6Hz

        # Update frame counter
        frame_counter += 1

        #Swap foreground color at 6Hz frequency
        if frame_counter % (color_alternating_freq * 2) < color_alternating_freq:
            move_right.color = 'white'
        else:
            move_right.color = 'black'
    GratingComponent move_right
      phase [set every frame] = 0.0
      pos [set every frame] = (-1+t*0.1, 0)
      size = (0.2,1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      tex = $vertical_stim['img']
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    ImageComponent right_gray_screen
      color = $[0,0,0]
      size = (0.5, 0.5)
      startVal [time (s)] = 20
      stopVal [duration (s)] = 10
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  Routine Horizontal_Up
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    CodeComponent checker_texture_up
      Code Type = Auto->JS
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      Begin Experiment:
        #import numpy as np
        #from psychopy import visual
        #
        #from stimupy.stimuli.checkerboards import checkerboard

        #horizontal_up_stim = checkerboard(visual_size=(3,15), ppd=31,
        #shape=None, frequency=0.5, board_shape=(3,15),
        #check_visual_size=1, period='ignore', rotation=0,
        #intensity_checks=(-1,1), intensity_target=1)
        #
        ##PARAMETERS
        #frame_rate = 60
        #
        #color_alternating_freq = int(frame_rate/12)
        #
        ##Initialize frame counter
        #frame_counter = 0
      Begin Routine:
        stim = horizontal_stim

        frame_counter = 0
      Each Frame:
        # Update frame counter
        frame_counter += 1

        #Swap foreground color at 6Hz frequency
        if frame_counter % (color_alternating_freq * 2) < color_alternating_freq:
            move_up.color = 'white'
        else:
            move_up.color = 'black'
    GratingComponent move_up
      phase [set every frame] = 0.0
      pos [set every frame] = (0, -0.5+t*0.07)
      size = (1.8, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 13.4
      tex = $horizontal_stim['img']
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    ImageComponent up_gray_screen
      color = $[0,0,0]
      size = (0.5, 0.5)
      startVal [time (s)] = 13.4
      stopVal [duration (s)] = 10
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  Routine Vertical_Left
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    CodeComponent checker_texture_left
      Code Type = Auto->JS
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      Begin Experiment:
        #import numpy as np
        #from psychopy import visual

        #vertical_left_stim = checkerboard(visual_size=(13,3), ppd=31,
        #shape=None, frequency=0.5, board_shape=(13,3),
        #check_visual_size=1, period='ignore', rotation=0,
        #intensity_checks=(-1,1), intensity_target=1)
        #
        ##PARAMETERS
        #ppd = 31
        #frame_rate = 60
        #
        #color_alternating_freq = int(frame_rate/12)
        #
        ##Initialize frame counter
        #frame_counter = 0
      Begin Routine:
        stim = vertical_stim

        frame_counter = 0
      Each Frame:
        #need to change foreground color value from black to
        #white at 6Hz

        # Update frame counter
        frame_counter += 1

        #Swap foreground color at 6Hz frequency
        if frame_counter % (color_alternating_freq * 2) < color_alternating_freq:
            move_left.color = 'white'
        else:
            move_left.color = 'black'
    GratingComponent move_left
      phase [set every frame] = 0.0
      pos [set every frame] = (1+t*-0.1, 0)
      size = (0.2,1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      tex = $vertical_stim['img']
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    ImageComponent left_gray_screen
      color = $[0,0,0]
      size = (0.5, 0.5)
      startVal [time (s)] = 20
      stopVal [duration (s)] = 10
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  Routine Custom_Imports
    RoutineSettingsComponent Custom_Imports
      saveStartStop = False
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    CodeComponent import_modules
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np
        import time
        from psychopy import visual

        from stimupy.stimuli.checkerboards import checkerboard
  Routine Input_Output
    RoutineSettingsComponent Input_Output
      saveStartStop = False
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      desc:
        Receive command line arguments from a Parent process when launching this experiment as a a subprocess. This code is meant to circumvent the usual launch of a PsychoPy experiment, forgoing manual entry of subject information into a popup dialog box.

        This block allows standard input system arguments to define:
        - BIDS format information for file saving
        - the number of stimulus trials calculated in the parent process.
        - Save file directory paths
    CodeComponent get_input_arguments
      Code Type = Auto->JS
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      Before Experiment:
        #=============================== Custom Codeblock jgronemeyer =====================================#
        #add system argument functionality
        #Get command line arguments passed if present
        sysarg_protocol_id = 'prot'
        sysarg_subject_id = 'sub'
        sysarg_session_id = 'ses'
        sysarg_save_dir = None
        nTrials = 1 # changed data.TrialHandler2 object value nReps value to call this variable
        if len(sys.argv) > 1:
            sysarg_protocol_id = sys.argv[1]  # get the first argument from command line
            sysarg_subject_id = sys.argv[2]  # get the second argument from command line
            sysarg_session_id = sys.argv[3]  # get the third argument from command line
            sysarg_save_dir = sys.argv[4]  # get the fourth argument from command line
            nTrials = sys.argv[5] # get the fifth argument from the command line
            #encoder = sys.argv[6] # TODO: accept encoder parameters
        #==================================================================================================#
    CodeComponent save_bids_format
      Code Type = Auto->JS
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      Before Experiment:
        timestamp = time.strftime("%Y-%m-%d_%H-%M-%S")
      End Experiment:
        #=============================== Custom Codeblock jgronemeyer =====================================#
        # Sipelab standard BIDS protocol file naming for
        #   future batch analysis and data wrangling
        protocol_id = expInfo['Protocol ID']
        subject_id = expInfo['Subject ID']
        session_id = expInfo['Session ID']
        timestamp = datetime.now().strftime('%Y%m%d_%H%M%S') # get current timestamp (BIDS)

        #save_to = u'data/%s/sub-%s/ses-%s/beh' % (expInfo['Protocol ID'], expInfo['Subject ID'], expInfo['Session ID'])
        save_to = f'data/{protocol_id}/sub-{subject_id}/ses-{session_id}/beh'
        new_dir = os.path.join(_thisDir, save_to)

        # Create the path if it does not exist
        if not os.path.exists(new_dir):
            os.makedirs(new_dir)


        filename = os.path.join(new_dir, f"sub-{subject_id}_ses-{session_id}_{timestamp}_wheeldf.csv")

        if encoder_data is not None:
            encoder_data.to_csv(filename, index=False)
        else:
            print("No encoder data in `encorder_data`")
        #==================================================================================================#
  Routine Custom_Trigger
    RoutineSettingsComponent Custom_Trigger
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      desc:
        Displays text on grey screen until a keyboard response is registered.

        Upon press, the experiment starts immediately
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Horizontal_Down
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    CodeComponent checker_texture_down
      Code Type = Auto->JS
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      Begin Experiment:
        #import numpy as np
        #from psychopy import visual
        #
        #from stimupy.stimuli.checkerboards import checkerboard

        #horizontal_down_stim = checkerboard(visual_size=(3,15), ppd=31,
        #shape=None, frequency=0.5, board_shape=(3,15),
        #check_visual_size=1, period='ignore', rotation=0,
        #intensity_checks=(-1,1), intensity_target=1)
        #
        ##PARAMETERS
        #frame_rate = 60
        #
        #color_alternating_freq = int(frame_rate/12)
        #
        ##Initialize frame counter
        #frame_counter = 0
      Begin Routine:
        stim = horizontal_stim

        frame_counter = 0
      Each Frame:
        #need to change foreground color value from black to
        #white at 6Hz

        # Update frame counter
        frame_counter += 1

        #Swap foreground color at 6Hz frequency
        if frame_counter % (color_alternating_freq * 2) < color_alternating_freq:
            move_down.color = 'white'
        else:
            move_down.color = 'black'
    GratingComponent move_down
      phase [set every frame] = 0.0
      pos [set every frame] = (0, 0.5+t*-0.07)
      size = (1.8, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 13.4
      tex = $horizontal_stim['img']
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    ImageComponent down_gray_screen
      color = $[0,0,0]
      size = (0.5, 0.5)
      startVal [time (s)] = 13.4
      stopVal [duration (s)] = 10
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  Routine Checkerboard
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        #PARAMETERS
        ppd = 31
        frame_rate = 60
        color_alternating_freq = int(frame_rate/12)

        # Vertical parameters
        # vertical_size = (0.2, 1)
        vertical_stim = checkerboard(
            visual_size=(13, 3),
            ppd=ppd,
            shape=None,
            frequency=0.5,
            board_shape=(13, 3),
            check_visual_size=1,
            period='ignore',
            rotation=0,
            intensity_checks=(-1, 1),
            intensity_target=1
        )

        # Horizontal parameters
        # horizontal_size = (1.8, 0.2)
        horizontal_stim = checkerboard(
            visual_size=(3, 15),
            ppd=ppd,
            shape=None,
            frequency=0.5,
            board_shape=(3, 15),
            check_visual_size=1,
            period='ignore',
            rotation=0,
            intensity_checks=(-1, 1),
            intensity_target=1
        )

        #orientation_dict = {
        #    'vertical_left': vertical_stim,
        #    'horizontal_up': horizontal_stim,
        #    'vertical_right': vertical_stim,
        #    'horizontal_down': horizontal_stim
        #}

        # NOTE: Assign the 'img' key value
        # `vertical_stim['img']` to the grating Texture
      Begin Routine:
        # Fetching parameters from Conditions csv file
        if stim_label == 'vertical':
            orientation = vertical_stim['img']
        elif stim_label == 'horizontal':
            orientation = horizontal_stim['img']

        #Initialize frame counter
        frame_counter = 0

        #direction_dict = {
        #    'right': [1 + t * -0.1, 0],
        #    'left': [-1 + t * 0.1, 0],
        #    'down': [0, 0.5 + t * -0.07],
        #    'up': [0, -0.5 + t * 0.07]
        #}
      Each Frame:
        #need to change foreground color value from black to
        #white at 6Hz

        # Update frame counter
        frame_counter += 1

        #Swap foreground color at 6Hz frequency
        if frame_counter % (color_alternating_freq * 2) < color_alternating_freq:
            checker_mask.color = 'white'
        else:
            checker_mask.color = 'black'

        # Fetching parameters from Conditions csv file
        if direction == 'right':
            p_x=(-1 + t * 0.1)
            p_y=0
        elif direction == 'left':
            p_x=(1 + t * -0.1)
            p_y=0
        elif direction == 'down':
            p_x=0
            p_y=(0.5 + t * -0.07)
        elif direction == 'up':
            p_x=0
            p_y=(-0.5 + t * 0.07)
      End Routine:
        orientation = None
    GratingComponent checker_mask
      phase [set every frame] = 0.0
      pos [set every frame] = (1 * p_x, 1 * p_y)
      size [set every repeat] = size
      startVal [time (s)] = 0
      stopVal [duration (s)] = duration
      tex [set every repeat] = $orientation
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    ImageComponent gray_screen
      size = (0.5, 0.5)
      startVal [time (s)] = duration
      stopVal [duration (s)] = 10
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Flow
  Routine Custom_Imports
  Routine Input_Output
  Routine Custom_Trigger
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = checkerboardTrials.xlsx
    loopType = random
    nReps = nTrials
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    conditions:
      [{'stim_label': 'vertical', 'direction': 'right', 'size': (0.2, 1), 'duration': 20},
      {'stim_label': 'vertical', 'direction': 'left', 'size': (0.2, 1), 'duration': 20},
      {'stim_label': 'horizontal', 'direction': 'down', 'size': (1.8, 0.2), 'duration': 13.4},
      {'stim_label': 'horizontal', 'direction': 'up', 'size': (1.8, 0.2), 'duration': 13.4}]
    Routine Checkerboard
  LoopTerminator trials
